# ------------------------------- PCL Part ------------------------------
BLOCK = "test";

#SOME CONSTANTS
int ROW = 49;
int COLLUMN = 4;

#Count of trials elapsed
double t_target = 0.00;
#Count of correct responds;
double t_correct = 0.00;
#Accuracy
double t_accuracy = 0.00;

array<string> sequence[ROW][COLLUMN] = read_sequence_file( logfile.subject() ); #the function returns a 2-D string array.

loop
    int i = 1
until
    i > COLLUMN
begin
		
	loop
		int j = 1
	until
		j > ROW
	begin
		int this_iti = random( ONE_SEC, TWO_SEC ) ;
		play_ITI_trial( this_iti );
		int sound_idx = int(sequence[j][i]);	

		#Determine the correct answer port for this trial
		int answer = get_answer( sound_idx ); 
	
		play_sound_trial( sound_idx );
		
		int parti_response = read_response(); #Shuld be either 1, 2 (Channel 1 / Channel 2) or 0 (no response)
		
		store_data( BLOCK, i, j, sound_idx, this_iti, answer, parti_response ); #(BLOCK, block_number, trial_number, sound_idx, this_iti, answer, response(just -1 here))
		
		#Update correct count
		if sound_idx == 1 || sound_idx == 7 then
			t_target = t_target + 1;
			if parti_response == answer then
				term.print("Response: " + string(parti_response) + "\n");
				term.print("Answer: " + string(answer) + "\n");
				t_correct = t_correct + 1;
				term.print(string(t_correct) + "\n");
				term.print("\n");
			end;
		end;
			
		j = j + 1;
	end;
	
	#Calculate accuracy
	t_accuracy = round(t_correct / t_target, 3);
	
	
	string block_comp = lang.get_text( "Block Complete Caption" );
	block_comp = block_comp.replace("[BLOCK_STATS]", string( t_accuracy * 100 ) + "%");
	block_comp = block_comp.replace("[BLOCK_NUMBER]", string(i) );
	block_comp = block_comp.replace("[TOTAL_BLOCKS]", string(COLLUMN) );
	play_instruct_trial( block_comp );
	play_break_trial( "BREAK" );
	play_ITI_trial( TWO_SEC ); #Just a 2 second buffer so the next block don't jump on you.
		
	t_correct = 0;
	t_target = 0;	
	
	i = i + 1;
end;

